(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")

// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

(AutomaticParameterEstimation "true")

//***************testing
(UseAdaptiveStepSizes "true")



// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "NormalizedMutualInformation")
//(Metric "AdvancedMattesMutualInformation")
//(Optimizer "StandardGradientDescent")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 6)
// default schedule: isotropic upsampling with factor 2
//(FixedImagePyramidSchedule 16 16 16 8 8 4 4 2 2 1 1)

// ********** Transform

(FinalGridSpacingInPhysicalUnits 10)
//(FinalGridSpacingInVoxels 12 12 3)
//(GridSpacingSchedule 16.0 16.0 16.0 16.0 8.0 4.0 2.0 1.0)
(ImagePyramidSchedule 16.000000 16.000000 4.000000 8.000000 8.000000 3.000000 4.000000 4.000000 2.000000 2.000000 2.000000 1.000000 1.000000 1.000000 1.000000)

(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000)
//(MaximumNumberOfSamplingAttempts 50)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
//(SP_a 20000.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.602)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 80.0)


// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 16)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "false")
(ResultImageFormat "nii.gz")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate" "RandomCoordinate")

(NumberOfSpatialSamples 3000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(SampleRegionSize 100)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

